CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>.*)_[0-9]{2}_[0-9]_[0-9]_(?P<channel>.*)_[0-9]{3}.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Barcode>BR[0-9]{8})_(?P<Date>.*)_(?P<Time>.*)_(?P<Plate>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:////neidl-bigstorage1.bumc.bu.edu/Davey%20Ti2%20local%20cloud/Justin/00%20Screening/Broad/Stack%201/IllumGreen.npy   
    Name to assign this image:IllumGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Barcode

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Green
    Name the output image:CorrGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:3.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:.1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrGreen
    Name the primary objects to be identified:Infected
    Typical diameter of objects, in pixel units (Min,Max):8,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:1.4
    Threshold correction factor:1.175
    Lower and upper bounds on threshold:0.2,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Median absolute deviation
    # of deviations:0
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
ExportToSpreadsheet:[module_num:8|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/Volumes/Davey Ti2 local cloud/Justin/0 CPA Test/Output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Count_Infected,Image|FileName_Blue,Image|FileName_Green,Image|FileName_IllumGreen,Image|Metadata_Plate,Image|Metadata_Barcode,Image|Metadata_Well,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Experiment|Modification_Timestamp,Experiment|Metadata_GroupingTags
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:9|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|\\\\neidl-bigstorage1.bumc.bu.edu\\davey ti2 local cloud\\Justin\\00 Screening\\Barabasi\\CP Test
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:Stack_1.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:Blue,Green
    Auto-scale thumbnail pixel intensities?:No
    Select the plate type:384
    Select the plate metadata:Barcode
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:2
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
    Select an image to include:Blue
    Use the image name for the display?:Yes
    Image name:Channel1
    Channel color:blue
    Select an image to include:Green
    Use the image name for the display?:Yes
    Image name:Channel2
    Channel color:green
    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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