CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Well>.*)_[0-9]{2}_[0-9]_[0-9]_(?P<Channel>.*)_[0-9]{3}.tif$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Date>.*)_(?P<Time>.*)_(?P<Plate>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Blue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:5
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Blue
    Number of pixels by which to expand the primary objects:7
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Green
    Name the primary objects to be identified:PLD
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Propagate
    Size of smoothing filter:6
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.4
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

RelateObjects:[module_num:8|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
    Parent objects:Cell
    Child objects:PLD
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
MeasureImageIntensity:[module_num:9|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
    Select the image to measure:Green
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:RelateObjects

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|H:\\Ti2 Images\\RuthMabel\\210923_PNAS_PLD_rep2
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Count_Nuclei,Image|Count_PLD,Image|Count_RelateObjects,Image|Intensity_TotalIntensity_Green_RelateObjects,Image|Intensity_TotalArea_Green_RelateObjects,Image|FileName_Blue,Image|FileName_Green,Image|Metadata_Plate,Image|Metadata_Well,Cell|Children_PLD_Count,Cell|Mean_PLD_Number_Object_Number,PLD|Children_RelateObjects_Count
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:DIPL_int_area_
    Overwrite existing files without warning?:No
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